OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
Comment
  Do not forget to look at the python scripts used
  in all of the python boxes in this scenario.
Comment
  Sinus generator

  This script generates a sine wave.
Comment
  Clock stimulator

  This script generates stimulations
  every time it is triggered.

  It illustrates the use of
  Clock Frequency parameter.
Comment
  Spectra are displayed to better compare the generated results

Sinus generator => #0
  Clock frequency (Hz) = 16
  Script = ${Player_ScenarioDirectory}/python-sinus-oscillator.py
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
-> Publisher
  Clock frequency (Hz) = 64
  Script = /home/fedie/Programmierung/Schule/OpenBci/bci/Bci_mqtt_python/openVibe_mqtt_publisher.py
Clock stimulator => #2
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/python-clock-stimulator.py
  Stimulation = OVTK_StimulationId_Label_00
Data=#0, Stimulations=#2 -> Signal display "Sinus"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
