OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/own/felix_kampfer_1_7.5-10-12.ov
#0.Output stream 1 -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/own/felix_1_signal.ov
  Column separator = ;
  Precision = 10
#0.Output stream 2 -> Python scripting
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/sylvchev_gdf/GDF_stim_converter.py
-> 0xc67a01dc CSV File Writer
  Filename = ${Player_ScenarioDirectory}/own/felix_1_stims.ov
  Column separator = ;
  Precision = 10
#0.Output stream 1 -> Timeout
  Timeout delay = 1
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
