OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

GDF file reader => #0
  Filename = /home/webber/BCI-Projekt/bci/datasets/sylvchev_gdf/Subject2/Subject2-[2012.04.07-19.27..02].gdf
  Samples per buffer = 32
  Subtract physical minimum = false
Data=#0.EEG stream, Stimulations=#0.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Stimulations -> 0xc67a01dc Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 1000000000
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_00
-> Stimulation listener "GDF"
  Log level to use = Information

CSV File Reader => #4
  Filename = /home/webber/BCI-Projekt/bci/datasets/sylvchev_gdf/csv_example/s2_t1_stim.csv
  Column separator = ;
  Don't use the file time = false
  Unused parameter = 0
-> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 1000000000
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_00
  Stimulation range end = OVTK_StimulationId_Label_00
-> Stimulation listener "CSV"
  Log level to use = Information
CSV File Reader => #7
  Filename = /home/webber/BCI-Projekt/bci/datasets/sylvchev_gdf/csv_example/s2_t1_signal.csv
  Column separator = ;
  Don't use the file time = false
  Samples per buffer = 32
Data=#7, Stimulations=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
