OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

GDF file reader => #0
  Filename = ${Player_ScenarioDirectory}/Subject2/Subject2-[2012.04.07-19.27..02].gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.Stimulations -> Python scripting => #1
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/GDF_stim_converter.py
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#1 -> 0xc67a01dc CSV File Writer
  Filename = ${Player_ScenarioDirectory}/csv/stim.csv
  Column separator = ;
  Precision = 10
#0.EEG stream -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/csv/signal.csv
  Column separator = ;
  Precision = 10
