OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
Comment
  length of stimulations = 6.25 seconds

0xc67a01dc Sinus generator => #0
  Clock frequency (Hz) = 16
  Script = ${Player_ScenarioDirectory}/scripts/python-sinus-oscillator.py
  Channel count = 8
  Sampling frequency = 512
  Generated epoch sample count = 32
  Length in seconds = 300
  Frequencies = 0; 7.5; 10; 12
  Noise Normal Distribution Sigma = 0.5
Data=#0.Generated signals -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Generated signals -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/csv/signal.csv
  Column separator = ;
  Precision = 10
#0.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Stimulations -> Stimulation listener
  Log level to use = Information
#0.Stimulations -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/csv/stim.csv
  Column separator = ;
  Precision = 10
#0.Generated signals -> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
-> Spectral analysis (FFT) => #7
  Spectral components = Amplitude
#7.Amplitude -> Power spectrum display
  Minimum frequency to display = 0
  Maximum frequency to display = 40
