OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  Player setting in python scripting box:
  Set to 0 for single-player
  Set to 1 for player1 and 2 for player2
Comment
  Finally, the feature vectors are classifier with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/channel-filter.cfg
-> Simple DSP => #2
  Equation = x*1000000000000
Input stream 1=#0.Experiment information, Input stream 2=#2, Input stream 3=#0.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4-online-[$core{date}-$core{time}].ov
  Use compression = false
#2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/bandpass-filter.cfg
-> CSP Spatial Filter
  Spatial Filter Coefficients = 4.658656e-01 -1.428619e-01 -1.569868e-01 -5.336510e-01 -5.621170e-02 6.645954e-01 -8.639333e-02 -2.865055e-02 -2.495634e-02 -4.216156e-01 -3.961887e-01 -6.625955e-01 3.635219e-01 2.113940e-01 1.196478e-02 2.205455e-01 3.580839e-01 -6.317484e-01 -3.908270e-01 5.335209e-01 1.603598e-01 -6.123520e-02 -1.749646e-02 -7.421895e-02 -4.075705e-01 9.010186e-03 1.620246e-01 -5.029562e-01 -4.205314e-01 4.702985e-01 2.668723e-01 -2.921301e-01 3.590066e-01 4.430079e-01 -7.116061e-01 -3.713262e-02 -1.313206e-01 -1.601390e-01 3.266291e-01 1.323630e-01 5.917201e-01 -3.465994e-01 2.082615e-01 9.325437e-02 -6.078681e-01 -4.598026e-02 3.208425e-01 5.576108e-02 -3.809905e-01 -5.261058e-01 4.111976e-01 3.784265e-01 -3.227669e-01 -3.373295e-01 7.005204e-03 2.185180e-01
  Number of Output Channels = 7
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Features=#10 -> Classifier processor => #11
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
#11.Probability values -> Matrix Transpose => #12
-> Python scripting
  Clock frequency (Hz) = 64
  Script = /home/chriss/projektarbeit1/bci/Bci_mqtt_python/openVibe_mqtt_publisher.py
  Player = 1
#12 -> Matrix Display "Probability Display"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#0.Signal stream -> Channel Selector "9:16"
  Channel List = 9:16
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP => #16
  Equation = x*1000000000000
Input stream 1=#0.Experiment information, Input stream 2=#16 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-4-online-[$core{date}-$core{time}].ov
  Use compression = false
#16 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/bandpass-filter.cfg
-> CSP Spatial Filter
  Spatial Filter Coefficients = 4.658656e-01 -1.428619e-01 -1.569868e-01 -5.336510e-01 -5.621170e-02 6.645954e-01 -8.639333e-02 -2.865055e-02 -2.495634e-02 -4.216156e-01 -3.961887e-01 -6.625955e-01 3.635219e-01 2.113940e-01 1.196478e-02 2.205455e-01 3.580839e-01 -6.317484e-01 -3.908270e-01 5.335209e-01 1.603598e-01 -6.123520e-02 -1.749646e-02 -7.421895e-02 -4.075705e-01 9.010186e-03 1.620246e-01 -5.029562e-01 -4.205314e-01 4.702985e-01 2.668723e-01 -2.921301e-01 3.590066e-01 4.430079e-01 -7.116061e-01 -3.713262e-02 -1.313206e-01 -1.601390e-01 3.266291e-01 1.323630e-01 5.917201e-01 -3.465994e-01 2.082615e-01 9.325437e-02 -6.078681e-01 -4.598026e-02 3.208425e-01 5.576108e-02 -3.809905e-01 -5.261058e-01 4.111976e-01 3.784265e-01 -3.227669e-01 -3.373295e-01 7.005204e-03 2.185180e-01
  Number of Output Channels = 7
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #24
Features=#24 -> Classifier processor => #25
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
#25.Probability values -> Matrix Transpose => #26
-> 0xc67a01dc Python scripting
  Clock frequency (Hz) = 64
  Script = /home/chriss/projektarbeit1/bci/Bci_mqtt_python/openVibe_mqtt_publisher.py
  Player = 2
#26 -> Matrix Display "Probability Display"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
