OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used to replay online sessions.
  The scenario displays the classification confusion matrix,
  along with the global performance evolving during the sessions.

  With this scenario, you can watch the performance of the classifier
  during time, and for each class.
Comment
  Here we want to classify only during trials. This is achieved by
  a simple lua script and a stream switch.

  The Switch Director is a Lua scripting box
  that controls a Stream Switch box.
  When an instruction is received (OVTK_StimulationId_Right / Left)
  the switch director tells the stream switch to redirect
  its signal input to the first output (i.e. routed to a classifier).
  Otherwise, the feature input is redirected to the second output,
  i.e. nothing.
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large alpha/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario
Comment
  The Classifier Processor classifies
   everytime it receives a new feature vector.

  If we want an accurate performance computation,
  we need to classify only when the participant
  is actually doing the task, i.e.
  when an instruction (left or right) is received.
  This is achieved by the switch above.
Comment
  Finally, the feature vectors are classified with an LDA
  classifier. Note that the state vector of the classifier
  (which in the case of the LDA is the distance to the
  separation plane) is sent to the Graz Visualization
  box for feedback !

  In order to display correct feedback,
  the Graz Visualization box expects a negative
  value for one class and a positive value for the other
  class.
Comment
  The Confusion Matrix computation needs
  the instruction flow, and the classification flow
  to compare them, for each class.

  As the instructions (OVTK_StimulationId_Left and _Right)
  are included in the stimulation stream, we need to filter
  away the other information in it with Stimulation Filter.

  Same goes for the Classifier Accuracy Measure that
  computes the global performance of the classifier.

Generic stream reader => #0
  Filename = C:/Users/Alexander/Documents/bci/motor-imagery-CSP/signals/Neuer Ordner/motor-imagery-csp-5-online-[2016.09.09-18.26.51].ov
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
#0.Output stream 3 -> Switch director => #2
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-epoch-selector.lua
  offset = 0.5
  duration = 4.0
#0.Output stream 2 -> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/config/bandpass-filter.cfg
Triggers=#2, Matrix=#3 -> 0xc67a01dc Stream Switch => #4
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Correct
#4.Output[0] -> CSP Spatial Filter
  Spatial Filter Coefficients = 3.787594e-001 -7.758798e-001 2.935981e-001 -1.374620e-001 2.339740e-001 -2.198284e-001 -7.086379e-002 2.033867e-001 -3.046286e-001 5.685503e-001 1.302846e-001 -6.887113e-001 2.535126e-001 -9.385026e-002 1.618930e-002 1.389826e-001 -5.825885e-002 -2.360756e-001 2.834999e-001 3.290584e-001 3.560892e-001 2.454980e-001 -4.429503e-001 -6.074116e-001 -3.983451e-001 -1.741940e-001 6.399284e-001 3.324327e-001 1.567575e-001 1.799783e-001 -2.505917e-001 -4.137590e-001 2.318109e-001 -1.713828e-001 2.026602e-002 7.390200e-002 -2.935263e-001 7.889511e-001 -3.079733e-001 -3.279792e-001 7.778415e-001 -1.909367e-003 -3.253450e-001 -3.855582e-001 2.165946e-001 -2.522215e-002 -3.016601e-001 4.366004e-002 -6.952485e-001 1.163379e-001 3.247670e-001 8.189203e-002 5.696584e-001 -1.783017e-001 -1.812471e-001 -4.198008e-002
  Number of Output Channels = 7
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
Features=#10 -> Classifier processor => #11
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
#11.Probability values -> Matrix Display "prob"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#11.Hyperplane distance -> Matrix Display "Hyperplane"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#11.Probability values -> Matrix Transpose
-> Signal to TCP
  Port = 5678
  Output format = Raw
#11.Probability values -> Matrix Display "prob"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input stream 2=#0.Output stream 3 -> Identity => #17
#17.Output stream 2 -> Stimulation Filter => #18
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Right
  Stimulation range end = OVTK_GDF_Right
Targets=#18, Classification results=#11.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#18, LDA=#11.Labels -> Accuracy Measure
Stimulations=#17.Output stream 2, Amplitude=#11.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
