OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the third stimulation frequency

CSV File Reader => #0
  Filename = /home/webber/BCI-Projekt/bci/openvibe_scenarios/ssvep_csv/../artifical_signal/csv/signal.csv
  Column separator = ;
  Don't use the file time = true
  Samples per buffer = 32
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/test_signal_csv.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Spectral analysis (FFT) => #2
  Spectral components = Amplitude
#2.Amplitude -> Raw Spectrum
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#0 -> Identity => #4
-> Spatial Filter
  Spatial Filter Coefficients = 5.301754e-17 -2.793208e-18 -9.128709e-01 1.825742e-01 1.825742e-01 1.825742e-01 1.825742e-01 1.825742e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
-> Temporal filter "Frequency 1" => #6
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7.25
  High cut frequency (Hz) = 7.75
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Spectral analysis (FFT) => #8
  Spectral components = Amplitude
#8.Amplitude -> Processed Spectrum
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#6 -> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Simple DSP => #14
  Equation = 1*x
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/dsp_scale.cfg
-> Feature aggregator => #15
Features=#15 -> Classifier processor => #16
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
#4 -> Spatial Filter
  Spatial Filter Coefficients = 5.301754e-17 -2.793208e-18 -9.128709e-01 1.825742e-01 1.825742e-01 1.825742e-01 1.825742e-01 1.825742e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 9.75
  High cut frequency (Hz) = 10.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Simple DSP
  Equation = 1*x
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/dsp_scale.cfg
-> Feature aggregator => #24
Features=#24 -> Classifier processor => #25
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-2.cfg
#4 -> Spatial Filter
  Spatial Filter Coefficients = 5.301754e-17 -2.793208e-18 -9.128709e-01 1.825742e-01 1.825742e-01 1.825742e-01 1.825742e-01 1.825742e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01 -3.535534e-01
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11.75
  High cut frequency (Hz) = 12.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Simple DSP
  Equation = 1*x
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/dsp_scale.cfg
-> Feature aggregator => #33
Features=#33 -> Classifier processor => #34
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifiers/classifier-3.cfg
New input[0]=#16.Labels, New input[1]=#25.Labels, New input[2]=#34.Labels -> SSVEP Voter => #35
  Lua Script = ${Player_ScenarioDirectory}/scripts/combination-classifier.lua
  Class count = 3
CSV File Reader => #36
  Filename = /home/webber/BCI-Projekt/bci/openvibe_scenarios/ssvep_csv/../artifical_signal/csv/stim.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/test_stim_csv.cfg
Data=#14, Stimulations=#36 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#36 -> Stimulation listener
  Log level to use = Information
#36 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
Targets=#36, Classification results=#35 -> 0xc67a01dc Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_StimulationId_Label_00
  Class 2 = OVTK_StimulationId_Label_01
  Class 3 = OVTK_StimulationId_Label_02
  Class 4 = OVTK_StimulationId_Label_03
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
