OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

Generic stream reader
  Filename = C:/Program Files (x86)/openvibe/share/openvibe/scenarios/bci-examples/ssvep/signals/TImo7810_1_ALL.ov
-> Identity => #1
-> Spatial Filter
  Spatial Filter Coefficients = 3.200223e-001 1.730214e-001 -1.182335e-001 -2.755772e-001 2.097329e-001 -6.759750e-001 -8.662718e-002 5.189346e-001 -1.319995e-010 1.065732e-011 -1.536096e-012 2.449593e-001 -7.066655e-001 1.694021e-001 3.322211e-001 -4.774582e-001 -8.073433e-003 2.248609e-001 1.515158e-001 -8.571559e-011 -2.893889e-011 8.167757e-011
  Number of Output Channels = 2
  Number of Input Channels = 11
  Filter matrix file =
  0x8d21ff41 = C:/Users/Timo/Desktop/Python_SSVEP/ssvep_training/classifiers/csp-1.cfg
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7.25
  High cut frequency (Hz) = 7.75
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/ssvep_training/configuration/temporal-filter-freq-1.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/ssvep_training/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #8
Features=#8 -> Classifier processor => #9
  Filename to load configuration from = C:/Users/Timo/Desktop/Python_SSVEP/ssvep_training/classifiers/classifier-1.cfg
#1 -> Spatial Filter
  Spatial Filter Coefficients = -1.336026e-001 5.494182e-002 2.168021e-001 1.361611e-001 -4.910809e-001 7.029787e-001 -2.750947e-001 -3.202689e-001 6.539210e-010 3.959083e-010 3.960941e-010 4.073942e-001 -3.001634e-002 -2.823391e-001 2.484238e-001 -7.808013e-001 1.402945e-001 1.379803e-001 2.081522e-001 6.729091e-011 3.834753e-011 3.760412e-012
  Number of Output Channels = 2
  Number of Input Channels = 11
  Filter matrix file =
  0x8d21ff41 = C:/Users/Timo/Desktop/Python_SSVEP/ssvep_training/classifiers/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.32
  High cut frequency (Hz) = 8.82
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/ssvep_training/configuration/temporal-filter-freq-2.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/ssvep_training/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #16
Features=#16 -> Classifier processor => #17
  Filename to load configuration from = C:/Users/Timo/Desktop/Python_SSVEP/ssvep_training/classifiers/classifier-2.cfg
#1 -> Spatial Filter
  Spatial Filter Coefficients = 3.338225e-001 2.677323e-001 -3.536504e-001 2.971591e-001 2.447917e-002 -2.784064e-001 -6.053771e-001 3.986465e-001 9.076560e-012 5.855114e-011 -1.230944e-011 1.411182e-001 1.669179e-001 1.999822e-002 3.410027e-001 -8.798527e-001 3.231000e-002 4.444145e-002 2.416226e-001 -4.332062e-011 3.569875e-011 -5.052698e-011
  Number of Output Channels = 2
  Number of Input Channels = 11
  Filter matrix file =
  0x8d21ff41 = C:/Users/Timo/Desktop/Python_SSVEP/ssvep_training/classifiers/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 9.75
  High cut frequency (Hz) = 10.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/ssvep_training/configuration/temporal-filter-freq-3.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/ssvep_training/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #24
Features=#24 -> Classifier processor => #25
  Filename to load configuration from = C:/Users/Timo/Desktop/Python_SSVEP/ssvep_training/classifiers/classifier-3.cfg
New input[0]=#9.Labels, New input[1]=#17.Labels, New input[2]=#25.Labels -> SSVEP Voter => #26
  Lua Script = C:/Users/Timo/Desktop/Python_SSVEP/ssvep_training/scripts/shooter-combination-classifier.lua
  Class count = 3
New input[0]=#26, New input[1]=#26, New input[2]=#26 -> 0xc67a01dc Python scripting
  Clock frequency (Hz) = 64
  Script = ${Path_Samples}/box-tutorials/python/scripts/python-print-stimulations.py
