OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the third stimulation frequency

CSV File Reader
  Filename = /home/webber/BCI-Projekt/bci/openvibe_python/../datasets/tsinghua/csv_example/test_signal.csv
  Column separator = ;
  Don't use the file time = true
  Samples per buffer = 32
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/test_signal_csv.cfg
-> Identity => #1
-> Spatial Filter
  Spatial Filter Coefficients = 8.929049e-02 -3.827532e-01 -7.089399e-02 -3.615160e-01 7.078522e-01 -3.890665e-01 2.395390e-01 -1.013531e-03 9.245380e-02 1.702077e-01 -9.179277e-02 1.431073e-02 1.838190e-01 -8.257374e-01 1.798931e-03 4.880737e-01
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
-> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.75
  High cut frequency (Hz) = 9.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
-> Time based epoching "TBE" => #4
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
#1 -> Spatial Filter
  Spatial Filter Coefficients = 5.368970e-01 -1.934282e-01 3.081769e-02 5.188162e-01 1.944424e-01 -5.271859e-01 -1.129313e-01 -2.751741e-01 -2.934880e-01 4.405107e-01 1.273961e-01 -6.031766e-01 9.286103e-02 4.993322e-01 6.547285e-02 -2.784256e-01
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
-> Temporal filter "Frequency 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 10.75
  High cut frequency (Hz) = 11.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
-> Time based epoching "TBE" => #7
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
#1 -> Spatial Filter
  Spatial Filter Coefficients = 7.927618e-03 -7.687384e-02 -2.519961e-01 -3.764035e-01 8.565459e-01 -2.201683e-01 -3.709180e-02 7.297433e-02 -2.865919e-01 1.233461e-01 -8.429990e-02 -7.179995e-01 2.554895e-01 4.538608e-01 2.922991e-01 -1.527015e-01
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
-> Temporal filter "Frequency 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12.75
  High cut frequency (Hz) = 13.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
-> Time based epoching "TBE" => #10
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
Signal1=#4, Signal2=#7, Signal3=#10 -> Python scripting => #11
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/scripts/TestGaussianNB.py
  Classifier_Dir = ${Player_ScenarioDirectory}/classifiers
CSV File Reader => #12
  Filename = /home/webber/BCI-Projekt/bci/openvibe_python/../datasets/tsinghua/csv_example/test_stim.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/test_stim_csv.cfg
Targets=#12, Classification results=#11 -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_StimulationId_Label_01
  Class 2 = OVTK_StimulationId_Label_02
  Class 3 = OVTK_StimulationId_Label_03
-> 0xc67a01dc Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
