OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
Comment
  Scenario description

  This step will use the signal recorded during the previous step
  training acquisition to generate classifiers which are in
  turn usable in online BCI applications.

  Important : Do not forget to
  change the settings in the Generic stream reader to load
  the file you recorded in the previous step. By default the
  scenario uses example data provided with OpenViBE.

  Notice : this scenario will work for three stimulation
  frequencies.  If you wish to use more than three commands in your
  applications, you will have to modify it.  This modification is
  pretty straightforward just duplicate a branch of the processing
  chain and change the files used by boxes Temporal filter,
  Target Separator and Classifier trainer
Comment
  Signal processing

  Each frequency is treated separately. There are two important
  boxes in the processing chain :

  Temporal filter extracts a single frequency band. It
  should be configured by a file generated by the configuration
  scenario.

  Target Separator separates targets used to mark one
  frequency from the others and sends stimulations to corresponding
  outputs (Target/Non-Target).
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the third stimulation frequency

CSV File Reader => #0
  Filename = /home/webber/BCI-Projekt/bci/openvibe_python/../datasets/tsinghua/csv_example/train_signal.csv
  Column separator = ;
  Don't use the file time = true
  Samples per buffer = 32
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/train_signal_csv.cfg
CSV File Reader => #1
  Filename = /home/webber/BCI-Projekt/bci/openvibe_python/../datasets/tsinghua/csv_example/train_stim.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/train_stim_csv.cfg
Input stream 1=#0, Input stream 2=#1 -> Identity => #2
#2.Output stream 1 -> Spatial Filter => #3
  Spatial Filter Coefficients = 8.929049e-02 -3.827532e-01 -7.089399e-02 -3.615160e-01 7.078522e-01 -3.890665e-01 2.395390e-01 -1.013531e-03 9.245380e-02 1.702077e-01 -9.179277e-02 1.431073e-02 1.838190e-01 -8.257374e-01 1.798931e-03 4.880737e-01
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
Input stream 1=#3, Input stream 2=#2.Output stream 2 -> Identity => #4
#4.Output stream 1 -> Temporal filter "Frequency 1" => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.75
  High cut frequency (Hz) = 9.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
#4.Output stream 2 -> Target Separator => #6
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#5, Input stimulations=#6.Stimulations -> Stimulation based epoching "SBE" => #7
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#7.Epoched signal -> Time based epoching "TBE" => #8
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
Input signal=#5, Input stimulations=#6.New output -> Stimulation based epoching "SBE" => #9
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#9.Epoched signal -> Time based epoching "TBE" => #10
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
#2.Output stream 1 -> Spatial Filter => #11
  Spatial Filter Coefficients = 7.927618e-03 -7.687384e-02 -2.519961e-01 -3.764035e-01 8.565459e-01 -2.201683e-01 -3.709180e-02 7.297433e-02 -2.865919e-01 1.233461e-01 -8.429990e-02 -7.179995e-01 2.554895e-01 4.538608e-01 2.922991e-01 -1.527015e-01
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
Input stream 1=#11, Input stream 2=#2.Output stream 2 -> Identity => #12
#12.Output stream 1 -> Temporal filter "Frequency 3" => #13
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12.75
  High cut frequency (Hz) = 13.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
#12.Output stream 2 -> Target Separator => #14
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 0 1 2
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#13, Input stimulations=#14.Stimulations -> Stimulation based epoching "SBE" => #15
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#15.Epoched signal -> Time based epoching "TBE" => #16
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
Input signal=#13, Input stimulations=#14.New output -> Stimulation based epoching "SBE" => #17
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#17.Epoched signal -> Time based epoching "TBE" => #18
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
#2.Output stream 1 -> Spatial Filter => #19
  Spatial Filter Coefficients = 5.368970e-01 -1.934282e-01 3.081769e-02 5.188162e-01 1.944424e-01 -5.271859e-01 -1.129313e-01 -2.751741e-01 -2.934880e-01 4.405107e-01 1.273961e-01 -6.031766e-01 9.286103e-02 4.993322e-01 6.547285e-02 -2.784256e-01
  Number of Output Channels = 2
  Number of Input Channels = 8
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
Input stream 1=#19, Input stream 2=#2.Output stream 2 -> Identity => #20
#20.Output stream 1 -> Temporal filter "Frequency 2" => #21
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 10.75
  High cut frequency (Hz) = 11.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
#20.Output stream 2 -> Target Separator => #22
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#21, Input stimulations=#22.Stimulations -> Stimulation based epoching "SBE" => #23
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#23.Epoched signal -> Time based epoching "TBE" => #24
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
Input signal=#21, Input stimulations=#22.New output -> Stimulation based epoching "SBE" => #25
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
#25.Epoched signal -> Time based epoching "TBE" => #26
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
Signal1=#8, Signal2=#10, Signal3=#24, Signal4=#26, Signal5=#16, Signal6=#18, Stim=#2.Output stream 2 -> 0xc67a01dc Python scripting
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/scripts/TrainGaussianNB.py
  output = ${Player_ScenarioDirectory}/classifiers
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
#2.Output stream 2 -> Stimulation listener
  Log level to use = Information
