OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
Comment
  Scenario description

  This scenario is used for training of the Common Spatial Pattern filters.
  These enable you to use any set of electrodes and will automatically
  select the best combination of them for you.

  By default the dimension of the CSP filters is 2. If you use many
  electrodes you may want to raise this value to get even better precision.

  For the detailed description and experimental protocol, please refer to
  the SSVEP Scenario documentation on the OpenViBE website.

  note: the classifiers go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/classifiers/).
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the third stimulation frequency

CSV File Reader => #0
  Filename = C:/Users/Timo/Documents/Workspace/Repositories/bci/datasets/tsinghua/csv/s1_train_data.csv
  Column separator = ;
  Don't use the file time = true
  Samples per buffer = 32
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/train_signal_csv.cfg
0xc67a01dc CSV File Reader => #1
  Filename = C:/Users/Timo/Documents/Workspace/Repositories/bci/datasets/tsinghua/csv/s1_train_stim.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/train_stim_csv.cfg
Input stream 1=#0, Input stream 2=#1 -> Identity => #2
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #3
#3.Output stream 1 -> Temporal filter "Frequency 1" => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.5
  High cut frequency (Hz) = 9.5
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
#3.Output stream 2 -> Target Separator => #5
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#4, Input stimulations=#5.Stimulations -> Stimulation based epoching "SBE" => #6
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#4, Input stimulations=#5.New output -> Stimulation based epoching "SBE" => #7
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#3.Output stream 2, Signal condition 1=#6.Epoched signal, Signal condition 2=#7.Epoched signal -> CSP Spatial Filter Trainer => #8
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
  Filter dimension = 2
  Save as box config = true
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #9
#9.Output stream 1 -> Temporal filter "Frequency 2" => #10
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 10.5
  High cut frequency (Hz) = 11.5
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
#9.Output stream 2 -> Target Separator => #11
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#10, Input stimulations=#11.New output -> Stimulation based epoching "SBE" => #12
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#10, Input stimulations=#11.Stimulations -> Stimulation based epoching "SBE" => #13
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#9.Output stream 2, Signal condition 1=#13.Epoched signal, Signal condition 2=#12.Epoched signal -> CSP Spatial Filter Trainer => #14
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
  Filter dimension = 2
  Save as box config = true
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2 -> Identity => #15
#15.Output stream 1 -> Temporal filter "Frequency 3" => #16
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12.5
  High cut frequency (Hz) = 13.5
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
#15.Output stream 2 -> Target Separator => #17
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 0 1 2
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#16, Input stimulations=#17.Stimulations -> Stimulation based epoching "SBE" => #18
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#16, Input stimulations=#17.New output -> Stimulation based epoching "SBE" => #19
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#15.Output stream 2, Signal condition 1=#18.Epoched signal, Signal condition 2=#19.Epoched signal -> CSP Spatial Filter Trainer => #20
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
  Filter dimension = 2
  Save as box config = true
New input[0]=#8, New input[1]=#14, New input[2]=#20 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
