OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
Comment
  Scenario description

  This scenario must be run at least once before
  running any further SSVEP scenarios

  This is a scenario where you can configure your SSVEP experiment. There
  are two boxes containing configuration parameters:

  Peripheral Settings

  Experiment Settings

  For more detailed description please refer to the SSVEP
  documentation page.
Comment
  Peripheral Settings

  Settings in this box must match your hardware configuration.
  Currently, the only supported setting is the screen refresh rate.

  Screen Refresh Rate :  The refresh rate of your screen,
  refer to your screen's user manual to find this value.

  Important notice

  Your screen will be able to reproduce only frequencies which
  are result of division of your screen refresh rate by an
  integer.
Comment
  Configurable box
Comment
  Configurable box
Comment
  Experiment Settings

  Settings concerning the SSVEP data acquisition in general.

  Target Light Color and Target Dark Color represent
  the two colors which will be used to generate the flickering of
  the targets. The notation Light and Dark is arbitrary, however on
  frequencies using odd number of frames will use more frames to
  represent the Light color.

  Stimulation Frequencies A comma separated list of
  frequencies used for the stimulation. Refer to the documentation
  for more details.

0xc67a01dc Peripheral Settings
  Lua Script = ${Player_ScenarioDirectory}/scripts/configuration-peripheral-settings.lua
  Screen Refresh Rate = 60
-> Experiment Settings
  Lua Script = ${Player_ScenarioDirectory}/scripts/configuration-acquisition-settings.lua
  Target Light Color = 100,0,0
  Target Dark Color = 10,10,10
  Stimulation Frequencies = 7.5;10;12
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
