OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/training-data.ov
#0.Output stream 2 -> Stimulation listener "Input Stimulation"
  Log level to use = Information
#0.Output stream 2 -> Python scripting => #2
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/scripts/stim_converter.py
-> Stimulation listener "Output Stimulation"
  Log level to use = Information
#2 -> 0xc67a01dc CSV File Writer
  Filename = ${Player_ScenarioDirectory}/csv/training-data-stim.csv
  Column separator = ;
  Precision = 10
#2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Output stream 1 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/csv/training-data-signal.csv
  Column separator = ;
  Precision = 10
