OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

CSV File Reader => #0
  Filename = /home/webber/BCI-Projekt/bci/openvibe_scenarios/ssvep_python_nolearn/signals/training-data-stim.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/train_stim_csv.cfg
0xc67a01dc CSV File Reader
  Filename = /home/webber/BCI-Projekt/bci/openvibe_scenarios/ssvep_python_nolearn/signals/training-data-signal.csv
  Column separator = ;
  Don't use the file time = true
  Samples per buffer = 32
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/train_signal_csv.cfg
-> Channel Selector ":8" => #2
  Channel List = :8
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#2, Input stream 2=#0 -> Identity => #3
#3.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 3
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Time based epoching => #5
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.2
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
Signal=#5, Stimulations=#3.Output stream 2 -> Train Classifier
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/scripts/NolearnTrain.py
  output = ${Player_ScenarioDirectory}/classifiers
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
