OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

0xc67a01dc CSV File Reader
  Filename = C:/Users/Timo/Documents/Workspace/bci/openvibe_scenarios/artifical_signal/csv/signal.csv
  Column separator = ;
  Don't use the file time = true
  Samples per buffer = 32
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/test_signal_csv.cfg
-> Channel Selector ":8" => #1
  Channel List = :8
  Action = Select
  Channel Matching Method = Smart
CSV File Reader => #2
  Filename = C:/Users/Timo/Documents/Workspace/bci/openvibe_scenarios/artifical_signal/csv/stim.csv
  Column separator = ;
  Don't use the file time = true
  Unused parameter = 0
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/test_stim_csv.cfg
Input stream 1=#1, Input stream 2=#2 -> Identity => #3
#3.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 3
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Time based epoching => #5
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
Signal=#5, Stimulations=#3.Output stream 2 -> Train Classifier
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/scripts/NolearnTest.py
  output = ${Player_ScenarioDirectory}/classifiers
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
