OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector ":8"
  Channel List = :8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 3
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.2
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Python scripting => #4
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/scripts/NolearnLive.py
  output = ${Player_ScenarioDirectory}/classifiers
-> Stimulation listener
  Log level to use = Information
#4 -> Python scripting
  Clock frequency (Hz) = 64
  Script = ${Player_ScenarioDirectory}/scripts/mqtt_SVVEP_publisher.py
